PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1200, 600]
  expName = simpleIdea
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Routines
  Routine routine_1_InitExperiment
    CodeComponent InitCode
      Code Type = Py
      Begin Experiment:
        # get packages we might need
        # import random

        # Experiment running conditions
        deltas = [200, 300, 400, 500, 600]
        num_reps = 2
        num_repsEsts = 1

        delta_order = []
        for d in deltas:
            for rep in range(0,num_reps):
                delta_order.append(d)

        # delta_order = shuffle(numpy.repeat(deltas, num_reps))
        np.random.shuffle(delta_order)
        num_trials = len(delta_order)
        print(num_trials)
        print(delta_order)


        # Screen settings
        Screen_height = 600
        Screen_width = 1200

        # Trial conditions
        Trial_time = 120 # this is specified in frames for now

        # avatar setup
        avatar_speed = 3
        avatar_y_offset = 100
        avatar_reach = 30
        box_size = 50
        box_truck   = [1,-1,-1]
        box_placed  = [.5,-.5,-.5]
        box_build   = [.09, -.45,-.85]
        box_burning = [.64, -.17, -.76]
        box_burnt   = [-.9, -.9, -.9]

        # Control Arrows
        Arrow_init_colour = [1,1,1]
        Arrow_clik_colour = [0,0,1]
        Arrow_size = 30
        Arrow_orient = [0,180,270,90]
        Arrow_y = [-150,-220,-185,-185]
        Arrow_x = [0, 0, -35, 35]
      Begin Routine:
        # get packages we might need
        # import random

        # Experiment running conditions
        #deltas = [200, 300, 400, 500, 600]
        #num_trials = 5

        # Screen settings
        #Screen_height = 600
        #Screen_width = 1200

        # Trial conditions
        #Trial_time = 120 # this is specified in frames for now

        # avatar setup
        #avatar_speed = 3
        #avatar_y_offset = 100
        #avatar_reach = 55
        #box_size = 50
        #box_truck   = [1,-1,-1]
        #box_placed  = [.5,-.5,-.5]
        #box_build   = [.09, -.45,-.85]
        #box_burning = [.64, -.17, -.76]
        #box_burnt   = [-.9, -.9, -.9]

        # Control Arrows
        #Arrow_init_colour = [1,1,1]
        #Arrow_clik_colour = [0,0,1]
        #Arrow_size = 30
        #Arrow_orient = [0,180,270,90]
        #Arrow_y = [-150,-220,-185,-185]
        #Arrow_x = [0, 0, -35, 35]
  Routine routine_2_WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 25
      startVal [frame N] = 0.0
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      text:
        Welcome to the experiment

        Press Space to continue
    KeyboardComponent WelcomeEscape
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_3_Demonstration
  Routine routine_4_Trial_Instructions
    TextComponent TrialInst
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        You will place the 'truck' by clicing between the two lines on screen.
        Once you are happy with the placement, press the spacebar to begin the trial.
        After a short amount of time, one of the two buidlings will catch fire,
        at which point you are to drive the truck towards this buidling.

        Press the spacebar to continue
    KeyboardComponent InstSkip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent ResetTrials
      Code Type = Py
      Begin Routine:
        trial_num = 0
  Routine routine_5a_PlaceAvatarInit
    CodeComponent PlaceInit
      Code Type = Py
      Begin Experiment:
        trial_num = 0
      Begin Routine:
        # get delta for this trial
        delta_thisT = delta_order[trial_num] - avatar_y_offset

        # set target position
        left_target = -delta_thisT
        right_target = delta_thisT

        # set the delay on each trial so pariticpants can't predict
        # when to respond
        delay = round((random() * 90)) + 60

        # Tried to append another trial given some condition
        # Might not be able to do that too easily...
        if delta_thisT == 200:
            deltas.append(200)
            num_trials += 1


        # setting colours
        left_colour = box_build
        right_colour = box_build

        # choose target
        choice = random()
        if choice <.5:
            target = "left"
        else:
            target = "right"

        # Isn't quite working... but it's not the most important step just now
        # choice = random.choice([0,1])
        # print(choice)
        #if choice == 1:
        #    left_colour = box_burning
        #    right_colour = box_build
        #else :
        #    left_colour = box_burning
        #    right_colour = box_build
      End Routine:
        trial_num += 1
  Routine routine_5b_PlacingAvatar
    PolygonComponent PlacementArea
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos = (0, 100)
      shape = rectangle
      size [set every frame] = $(Screen_width, box_size + 10)
      startVal [time (s)] = 0.0
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    MouseComponent AvatarMouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [frame N] = 0.0
      timeRelativeTo = routine
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    PolygonComponent leftTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = $(left_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent rightTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = $(right_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    KeyboardComponent PlacingKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent AvatarPlace
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        Avatar_x = 0
        Avatar_y = 100
      Begin Routine:
        frame = 0
        Avatar_x = 0
      Each Frame:
        # check for mouse click
        if AvatarMouse.getPos()[1] > 100 - (box_size/2) and AvatarMouse.getPos()[1] < 100 + (box_size/2):
            if AvatarMouse.getPressed()[0]:
                Avatar_x = AvatarMouse.getPos()[0]
                Avatar_y = 100
  Routine routine_5c_DrivingAvatar
    MouseComponent DrivingMouse
      clickable = upShape, downShape, rightShape, leftShape
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [frame N] = delay
      stopVal [frame N] = $Trial_time + delay
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    KeyboardComponent DrivingKeys
      allowedKeys = 'up','down','right','left'
      forceEndRoutine = False
      startVal [frame N] = delay
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent DrivingBoundary
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos = (0, 100)
      shape = rectangle
      size [set every frame] = $(Screen_width, box_size + 10)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    CodeComponent DrivingCode
      Code Type = Py
      Begin Routine:
        AvatarDrive_x = Avatar_x
        AvatarDrive_y = Avatar_y

        # get target location
        if target == "left":
            target_x = left_target
        elif target == "right":
            target_x = right_target
        target_y = 0

        # centre mouse by controls
        DrivingMouse.setPos(newPos =(0, Arrow_y[2]))

        # frame counter
        frame = 0

        state = "null"

        # set colours for arrows
        up_col    = Arrow_init_colour
        down_col  = Arrow_init_colour
        left_col  = Arrow_init_colour
        right_col = Arrow_init_colour
      Each Frame:
        # add to frame count and check whether to change colour
        frame += 1

        # keep mouse in place until trial starts
        if frame < delay:
            DrivingMouse.setPos(newPos =(0, Arrow_y[2]))

        # Don't draw the target early
        if frame >= delay:
            if target == "left":
                left_colour = box_burning
            elif target == "right":
                right_colour = box_burning

        # Probably don't need this now since keys aren't great
        key_pressed = DrivingKeys.keys
        # status just checks if we're listening to the keyboard
        state = 1

        # use the mouse to drive the avatar
        if DrivingMouse.isPressedIn(upClick):
            AvatarDrive_y += avatar_speed
            up_col = Arrow_clik_colour
        elif DrivingMouse.isPressedIn(downClick):
            AvatarDrive_y -= avatar_speed
            down_col = Arrow_clik_colour
        elif DrivingMouse.isPressedIn(rightClick):
            AvatarDrive_x += avatar_speed
            right_col = Arrow_clik_colour
        elif DrivingMouse.isPressedIn(leftClick):
            AvatarDrive_x -= avatar_speed
            left_col = Arrow_clik_colour
        else:
            # reset the colours if nothing is clicked
            up_col    = Arrow_init_colour
            down_col  = Arrow_init_colour
            left_col  = Arrow_init_colour
            right_col = Arrow_init_colour

        # Works by allowing people to set the direction of travel and the
        # avatar will drive in that direction until another key is pressed
        # NB: needs to only store the last key press
        #if key_pressed == 'up':
        #    AvatarDrive_y += avatar_speed
        #elif key_pressed == 'down':
        #    AvatarDrive_y -= avatar_speed
        #elif key_pressed == 'right':
        #    AvatarDrive_x += avatar_speed
        #elif key_pressed == 'left':
        #    AvatarDrive_x -= avatar_speed

        # check for success or failure
        # Was the target reached?
        x_dist = AvatarDrive_x - target_x
        y_dist = AvatarDrive_y - target_y
        dist = (x_dist)**2 + (y_dist)**2


        if dist <= avatar_reach**2:
            success = 1
            #routine_5c_DrivingAvatar.finished = True
            continueRoutine = False

        # has time run out?
        if frame >= Trial_time + delay:
            success = 0
            if target == "left":
                left_colour = box_burnt
            elif target == "right":
                right_colour = box_burnt
      End Routine:
        # Establish success or failure

        # This was a dumb thought... ignore that
        #if (AvatarDrive_y)**2 + (AvatarDrive_x)**2 == (avatar_reach)**2:
        #    success = 1
        #    if target == "left":
        #        left_colour = box_build
        #    elif target == "right":
        #        right_colour = box_build


        # check if time ran out
        if success == 0:
            if target == "left":
                left_colour = box_burnt
            elif target == "right":
                right_colour = box_burnt
        if success == 1:
            if target == "left":
                left_colour = box_build
            elif target == "right":
                right_colour = box_build
    PolygonComponent AvatarPlaced
      fillColor [set every frame] = $box_placed
      lineColor [set every frame] = $box_placed
      pos [set every frame] = $(Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent LeftBuild
      fillColor [set every frame] = $left_colour
      lineColor [set every frame] = $left_colour
      pos [set every frame] = $(left_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent RightBuild
      fillColor [set every frame] = $right_colour
      lineColor [set every frame] = $right_colour
      pos [set every frame] = $(right_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent AvatarDrive
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(AvatarDrive_x, AvatarDrive_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent upClick
      fillColor [set every frame] = $[1,1,1]
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[0]
      pos [set every frame] = $(Arrow_x[0], Arrow_y[0])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [frame N] = 0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent downClick
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[1]
      pos [set every frame] = $(Arrow_x[1], Arrow_y[1])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent leftClick
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[2]
      pos [set every frame] = $(Arrow_x[2], Arrow_y[2])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent rightClick
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori [set every frame] = 0
      pos [set every frame] = (Arrow_x[3], Arrow_y[3])
      shape = rectangle
      size [set every frame] = (Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent upShape
      fillColor [set every frame] = $up_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[0]
      pos [set every frame] = $(Arrow_x[0], Arrow_y[0])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent downShape
      fillColor [set every frame] = $down_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[1]
      pos [set every frame] = $(Arrow_x[1], Arrow_y[1])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent rightShape
      fillColor [set every frame] = $right_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[3]
      pos [set every frame] = $(Arrow_x[3], Arrow_y[3])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent leftShape
      fillColor [set every frame] = $left_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[2]
      pos [set every frame] = $(Arrow_x[2], Arrow_y[2])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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  Routine routine_5d_TrialFeedback
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if success == 1:
            Feedback_text = "You made it! :)"
        elif success == 0:
            Feedback_text = "The house burnt down :/"
    PolygonComponent DrivingBoundaryFeedback
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = (0, 100)
      shape = rectangle
      size [set every frame] = $(Screen_width, box_size + 10)
      stopVal [frame N] = 120
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    PolygonComponent AvatarPlacedFeedback
      fillColor [set every frame] = $box_placed
      lineColor [set every frame] = $box_placed
      pos [set every frame] = $(Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0
      stopVal [frame N] = 120
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    PolygonComponent LeftFeedback
      fillColor [set every frame] = $left_colour
      lineColor [set every frame] = $left_colour
      pos [set every frame] = $(left_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 120
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    PolygonComponent RightFeedback
      fillColor [set every frame] = $right_colour
      lineColor [set every frame] = $right_colour
      pos [set every frame] = $(right_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 120
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    PolygonComponent AvatarFeedback
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = (AvatarDrive_x, AvatarDrive_y)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 120
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    TextComponent text
      letterHeight = 20
      pos = (0, 150)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 120
      text [set every frame] = $Feedback_text
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Flow
  Routine routine_1_InitExperiment
  Routine routine_2_WelcomeScreen
  LoopInitiator BlockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator DemoLoop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine routine_3_Demonstration
    LoopTerminator DemoLoop
    Routine routine_4_Trial_Instructions
    LoopInitiator DecisionTrialLoop loopType="TrialHandler"
      loopType = random
      nReps = num_trials
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      Routine routine_5a_PlaceAvatarInit
      Routine routine_5b_PlacingAvatar
      Routine routine_5c_DrivingAvatar
      Routine routine_5d_TrialFeedback
    LoopTerminator DecisionTrialLoop
  LoopTerminator BlockLoop
